<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: NDI Polaris Halter Lab Test" 
      Description="Broadcasting tool tracking data through OpenIGTLink
for NDI Polaris tools with passive markers " />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      ToolReferenceFrame="Tracker"
      BaudRate="57600"
      AcquisitionRate="15"	  >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/medtronic_chicken_foot_960_556.rom"  />
        <!--<DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/medtronic_fromdata_2.rom"  />-->
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.nrrd"
      EnableFileCompression="TRUE"
      EnableCapturingOnStart="TRUE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>    
  </DataCollection>
  
  <CoordinateDefinitions>
    <Transform From="ProbeTip" To="Probe"
      Matrix="
        1	0	0	-304.6811
        0   1   0	0.3919
        0   0 	1	0.0873
        0	0	0	1"
       Error="?" Date="27-Apr-2021" />
  </CoordinateDefinitions>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackerStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
	<Transform Name="ProbeToTracker" />
        <!--<Transform Name="TrackerToProbe" />-->
	<!--<Transform Name="TrackerToProbeTip" />-->
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
